PsychoPy2experiment version="1.83.03"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1024, 768]
  Full-screen window = True
  Experiment info = {'participant':'', 'session':'001'}
  expName = visneuro
  Units = use prefs
  Screen = 1
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Routines
  Routine trial
    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
  Routine Instructions
    TextComponent inst
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        You will see pictures

        press left for gorillas
        press right for kittens
        press up for hedgehogs

        press spacebar to continue
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Thanks
    TextComponent Thank
      text = Thank you
      stopVal [duration (s)] = 2
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine picture
    ImageComponent image
      startVal [time (s)] = 0.0
      image [set every repeat] = $images
      size = [0.5, 0.5]
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    KeyboardComponent key_resp_3
      correctAns = $correct_ans
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys [set every repeat] = 'left','right','up'
      startVal [time (s)] = 0.0
      store = first key
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Flow
  Routine Instructions
  LoopInitiator loop loopType="TrialHandler"
    conditionsFile = images/datafile.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [{u'correct_ans': u'left', u'images': u'images/gorilla_face.jpeg'},
      {u'correct_ans': u'left', u'images': u'images/gorilla_fat.jpeg'},
      {u'correct_ans': u'left', u'images': u'images/gorilla_tongue.jpeg'},
      {u'correct_ans': u'right', u'images': u'images/cat_eyes.jpeg'},
      {u'correct_ans': u'right', u'images': u'images/ear_muffs_cat.jpeg'},
      {u'correct_ans': u'right', u'images': u'images/rat_cat.jpeg'},
      {u'correct_ans': u'up', u'images': u'images/egg_hog.jpeg'},
      {u'correct_ans': u'up', u'images': u'images/icecream_hog.jpeg'},
      {u'correct_ans': u'up', u'images': u'images/marshmallow_hog.jpeg'},
      {u'correct_ans': u'up', u'images': u'images/santa_hog.jpeg'}]
    Routine picture
  LoopTerminator loop
  Routine Thanks
