PsychoPy2experiment version="1.83.03"
Settings
  Data filename = u'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1024, 768]
  Full-screen window = True
  Experiment info = {'participant':'', 'session':'001'}
  expName = TF_mockup
  Units = use prefs
  Screen = 1
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Routines
  Routine Stimulus
    ImageComponent image
      startVal [time (s)] = 0.5
      image [set every repeat] = $images
      size = [0.5, 0.5]
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    StaticComponent ISI
      stopVal [duration (s)] = .5
      startVal [time (s)] = 0
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'left','right','up'
      startVal [time (s)] = 0.5
      store = first key
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  Routine Thank_you
  Routine Instructions
    TextComponent Instruct
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        You will see pictures

        Press left for gorillas
        Press right for kittens
        Press up for hedgehogs

        Press spacebar to continue
    KeyboardComponent space_bar
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
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Flow
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = images/datafile.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [{u'correct_ans': u'left', u'images': u'images/gorilla_face.jpeg', u'type_of_image': u'gorilla'},
      {u'correct_ans': u'left', u'images': u'images/gorilla_fat.jpeg', u'type_of_image': u'gorilla'},
      {u'correct_ans': u'left', u'images': u'images/gorilla_tongue.jpeg', u'type_of_image': u'gorilla'},
      {u'correct_ans': u'right', u'images': u'images/cat_eyes.jpeg', u'type_of_image': u'cat'},
      {u'correct_ans': u'right', u'images': u'images/ear_muffs_cat.jpeg', u'type_of_image': u'cat'},
      {u'correct_ans': u'right', u'images': u'images/rat_cat.jpeg', u'type_of_image': u'cat'},
      {u'correct_ans': u'up', u'images': u'images/egg_hog.jpeg', u'type_of_image': u'hog'},
      {u'correct_ans': u'up', u'images': u'images/icecream_hog.jpeg', u'type_of_image': u'hog'},
      {u'correct_ans': u'up', u'images': u'images/marshmallow_hog.jpeg', u'type_of_image': u'hog'},
      {u'correct_ans': u'up', u'images': u'images/santa_hog.jpeg', u'type_of_image': u'hog'}]
    Routine Stimulus
  LoopTerminator trials
  Routine Thank_you
