PsychoPy2experiment version="1.82.01"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1024, 768]
  Full-screen window = True
  Experiment info = {'participant':'', 'session':'001'}
  expName = proficient_bug
  Units = use prefs
  Screen = 1
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Routines
  Routine practice_block
    ImageComponent image_practice
      startVal [time (s)] = 0.0
      image [set every repeat] = $images
      size = [0.5, 0.5]
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    KeyboardComponent key_resp_3
      forceEndRoutine = True
      allowedKeys [set every repeat] = 'left','right','up'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Instructions_block
    TextComponent instructions_practice
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        This is a practice

        press left for gorillas
        press right for kitteh
        press up for squee hedgehog

        press space to continue
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine thanks_block
    TextComponent text
      text = Thanks for participating
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine images_block
    ImageComponent image_trial
      startVal [time (s)] = 0.0
      image [set every repeat] = $images
      size = [0.5, 0.5]
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    KeyboardComponent key_resp_4
      correctAns = $correct_ans
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys [set every repeat] = 'left','right','up'
      startVal [time (s)] = 0.0
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  Routine feedback_block
    CodeComponent create_msg
      Begin Experiment:
        msg = "check dat code"
      Begin Routine:
        if key_resp_3.corr == 1:
            msg = "Correct!"
        else:
            msg = "Incorrect!"
    TextComponent msg
      text [set every repeat] = $msg
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine proficient_block
    CodeComponent check_last_4
      Begin Experiment:
        temp_list = [ ]
      Begin Routine:
        temp_list.append(key_resp_3.corr)
        if len(temp_list) < 4:continue
        if sum(temp_list[-4:]) == 4:
            trials.finished = 1
Flow
  Routine Instructions_block
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = images/datafile.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [{u'correct_ans': u'left', u'images': u'images/gorilla_face.jpeg', u'type_of_image': u'gorilla'},
      {u'correct_ans': u'left', u'images': u'images/gorilla_fat.jpeg', u'type_of_image': u'gorilla'},
      {u'correct_ans': u'left', u'images': u'images/gorilla_tongue.jpeg', u'type_of_image': u'gorilla'},
      {u'correct_ans': u'right', u'images': u'images/cat_eyes.jpeg', u'type_of_image': u'cat'},
      {u'correct_ans': u'right', u'images': u'images/ear_muffs_cat.jpeg', u'type_of_image': u'cat'},
      {u'correct_ans': u'right', u'images': u'images/rat_cat.jpeg', u'type_of_image': u'cat'},
      {u'correct_ans': u'up', u'images': u'images/egg_hog.jpeg', u'type_of_image': u'hog'},
      {u'correct_ans': u'up', u'images': u'images/icecream_hog.jpeg', u'type_of_image': u'hog'},
      {u'correct_ans': u'up', u'images': u'images/marshmallow_hog.jpeg', u'type_of_image': u'hog'},
      {u'correct_ans': u'up', u'images': u'images/santa_hog.jpeg', u'type_of_image': u'hog'}]
    Routine practice_block
    Routine feedback_block
    Routine proficient_block
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = images/datafile.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [{u'correct_ans': u'left', u'images': u'images/gorilla_face.jpeg', u'type_of_image': u'gorilla'},
      {u'correct_ans': u'left', u'images': u'images/gorilla_fat.jpeg', u'type_of_image': u'gorilla'},
      {u'correct_ans': u'left', u'images': u'images/gorilla_tongue.jpeg', u'type_of_image': u'gorilla'},
      {u'correct_ans': u'right', u'images': u'images/cat_eyes.jpeg', u'type_of_image': u'cat'},
      {u'correct_ans': u'right', u'images': u'images/ear_muffs_cat.jpeg', u'type_of_image': u'cat'},
      {u'correct_ans': u'right', u'images': u'images/rat_cat.jpeg', u'type_of_image': u'cat'},
      {u'correct_ans': u'up', u'images': u'images/egg_hog.jpeg', u'type_of_image': u'hog'},
      {u'correct_ans': u'up', u'images': u'images/icecream_hog.jpeg', u'type_of_image': u'hog'},
      {u'correct_ans': u'up', u'images': u'images/marshmallow_hog.jpeg', u'type_of_image': u'hog'},
      {u'correct_ans': u'up', u'images': u'images/santa_hog.jpeg', u'type_of_image': u'hog'}]
    Routine images_block
  LoopTerminator trials_2
  Routine thanks_block
