PsychoPy2experiment version="1.81.03"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1024, 768]
  Full-screen window = True
  Experiment info = {'participant':'', 'session':'001'}
  expName = visneuro1
  Units = use prefs
  Screen = 1
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Routines
  Routine images
    ImageComponent image
      startVal [time (s)] = 0.0
      image [set every repeat] = $images
      size = [0.5, 0.5]
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    KeyboardComponent key_resp_3
      correctAns = $correct_ans
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = 'up','left','right'
      startVal [time (s)] = 0.0
      store = first key
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  Routine new_im
    TextComponent text_2
      stopVal [duration (s)] = 3.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        This is a test
        this is a new test
  Routine Thanks
    TextComponent text
      text = Thanks for participating!
      stopVal [duration (s)] = 5.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine Intruction
    TextComponent Instructions
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        You will see a pictures of animals.
        press the left key for gorilla
        press the right key for kitten
        press the up key for hedgehog

        Press spacebar to begin the task
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine Intruction
  LoopInitiator loop loopType="TrialHandler"
    conditionsFile = images/datafile.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{u'correct_ans': u'left', u'images': u'images/gorilla_face.jpeg'},
      {u'correct_ans': u'left', u'images': u'images/gorilla_fat.jpeg'},
      {u'correct_ans': u'left', u'images': u'images/gorilla_tongue.jpeg'},
      {u'correct_ans': u'right', u'images': u'images/cat_eyes.jpeg'},
      {u'correct_ans': u'right', u'images': u'images/ear_muffs_cat.jpeg'},
      {u'correct_ans': u'right', u'images': u'images/rat_cat.jpeg'},
      {u'correct_ans': u'up', u'images': u'images/egg_hog.jpeg'},
      {u'correct_ans': u'up', u'images': u'images/icecream_hog.jpeg'},
      {u'correct_ans': u'up', u'images': u'images/marshmallow_hog.jpeg'},
      {u'correct_ans': u'up', u'images': u'images/santa_hog.jpeg'}]
    Routine images
  LoopTerminator loop
  Routine Thanks
